CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tiff")
    Name to assign these images:OriginalSpotAssay
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OriginalSpotAssay
    Name the output image:CorrIllumGray
    Select how the illumination function is calculated:Background
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    Block size:55
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:OriginalSpotAssay
    Name the output image:CorrGray
    Select the illumination function:CorrIllumGray
    Select how the illumination function is applied:Subtract

Closing:[module_num:7|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
    Select the input image:CorrGray
    Name the output image:Closing
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:8|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notes:['']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
    Select the input image:Closing
    Name the primary objects to be identified:colonies
    Typical diameter of objects, in pixel units (Min,Max):3,85
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.000,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:9|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notes:['']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
    Select the input objects:colonies
    Name the new objects:mergedColonies
    Operation:Merge
    Maximum distance within which to merge objects:10
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyObjectsManually:[module_num:10|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
    Select the input image:OriginalSpotAssay
    Name the objects to be identified:row

RelateObjects:[module_num:11|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
    Parent objects:row
    Child objects:mergedColonies
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:rowparent
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
SplitOrMergeObjects:[module_num:12|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
    Select the input objects:mergedColonies
    Name the new objects:rows
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:row
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:rows
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:row
    Calculate the Zernike features?:No

OverlayObjects:[module_num:15|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
    Input:OriginalSpotAssay
    Name the output image:OverlayObjects
    Objects:rows
    Opacity:0.3

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:rows
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:OverlayObjects
    Text color:#00FF40
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:rows
    Measurement to display:AreaShape_MaximumRadius
    Select the image on which to display the measurements:OverlayObjects
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/xSpotAssays
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:rows|Number_Object_Number,rows|Location_Center_Y,rows|Location_Center_X,rows|Parent_mergedColonies,rows|AreaShape_Perimeter,rows|AreaShape_FormFactor,rows|AreaShape_Solidity,rows|AreaShape_Orientation,rows|AreaShape_Center_Y,rows|AreaShape_Center_X,rows|AreaShape_Center_Z,rows|AreaShape_Area,rows|AreaShape_MinFeretDiameter,rows|AreaShape_MajorAxisLength,rows|AreaShape_MaxFeretDiameter,rows|AreaShape_EulerNumber,rows|AreaShape_Eccentricity,rows|AreaShape_Compactness,rows|AreaShape_Extent,rows|AreaShape_MedianRadius,rows|AreaShape_MaximumRadius,rows|AreaShape_MinorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:rows
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
