CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:original
    Conversion method:Combine
    Image type:RGB
    Name the output image:CropGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:6|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notes:['The illumination is not uneven and the yeast patches sit on an agar plate that has background signal. The CorrectIlluminationCalculate module will "filter out" the patches and measure the background. The convex hull smoothing method works well with the masked image and reflects the natural contours of uneven illumination.']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
    Select the input image:CropGray
    Name the output image:Illumgray
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Remove the background']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
    Select the input image:CropGray
    Name the output image:CorrectedGray
    Select the illumination function:Illumgray
    Select how the illumination function is applied:Subtract

Closing:[module_num:8|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notes:['Smooth the yeast colonies with a closing operation.']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
    Select the input image:CorrectedGray
    Name the output image:ClosingGray
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:9|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notes:['The yeast patches will be segmented, but, despite cropping the image, there will still be plate edges that get segmented, too. Therefore, any object will be referred to as a "pre-spot" that will next be filtered to remove artifactual objects.']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
    Select the input image:ClosingGray
    Name the primary objects to be identified:Prespots
    Typical diameter of objects, in pixel units (Min,Max):10,110
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

DefineGrid:[module_num:10|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notes:['The pipeline up to this point has identified yeast patches that are whole and not speckled. We do not want to leave speckled patches out of the analysis, so we will take advantage of the geometry of the plate. The patches were arrayed in a grid and the DefineGrid module will take advantage of this fact. It requires whole patches in 3 of the 4 corners to work, so the experimental design and platemap should become aligned with the image analysis.']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
    Name the grid:Grid
    Number of rows:7
    Number of columns:5
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
    Select the previously identified objects:Prespots
    Select the method to define the grid manually:Mouse
    Select the image to display:CropGray
    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Select the image on which to display the grid:CropGray
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:11|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
    Select the defined grid:Grid
    Name the objects to be identified:NaturalSpots
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:Prespots

IdentifyObjectsInGrid:[module_num:12|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
    Select the defined grid:Grid
    Name the objects to be identified:ForcedSpots
    Select object shapes and locations:Circle Natural Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:NaturalSpots

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:CropGray
    Select objects to measure:NaturalSpots

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:NaturalSpots
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrectedGray
    Name the output image:OutlinedNatural
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:NaturalSpots

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:NaturalSpots
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:OutlinedNatural
    Text color:red
    Name the output image that has the measurements displayed:NaturalOutline_Area
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:NaturalSpots
    Measurement to display:Intensity_MeanIntensity_CropGray
    Select the image on which to display the measurements:OutlinedNatural
    Text color:red
    Name the output image that has the measurements displayed:NaturalOutline_Intensity
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:OutlinedNatural
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NaturalOutline
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:NaturalOutline_Area
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_modified
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_original,NaturalSpots|Intensity_MeanIntensity_CropGray,NaturalSpots|AreaShape_Area,NaturalSpots|Number_Object_Number
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:SpotAsssayQuant_
    Overwrite existing files without warning?:Yes
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